CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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notes:['CellProfiler is designed to find light objects on a dark background (as is typical in fluorescence)- here, the nuclei are dark against a bright background, so the image must first be inverted.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedImage
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:6|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notes:['After inversion, the nuclei are now the brightest areas in the image but there are still a number of areas with a middle grey level that we don’t want to identify- we will therefore in this and the next step try to remove some of the background to make the nuclei more prominent.  This step calculates the background.']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
    Select the input image:InvertedImage
    Name the output image:IllumInverted
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:10
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['The calculated background from the previous step is now subtracted to make the distinction between the nuclei and the background more prominent.']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
    Select the input image:InvertedImage
    Name the output image:CorrectedInverted
    Select the illumination function:IllumInverted
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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notes:['Once the image has been inverted and had some background signal removed, the nuclei can be directly found.']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
    Select the input image:CorrectedInverted
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayOutlines:[module_num:9|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notes:['Optional- output the original image with outlines of the final nuclei superimposed.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

ConvertObjectsToImage:[module_num:10|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notes:['Create a label matrix image showing the position of each nucleus to test the accuracy.']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
    Select the input objects:Nuclei
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:11|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notes:['Optional- save the outline image with the outlines.  ']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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notes:['Save the label matrix image.']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Labels
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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