CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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notes:['The nuclei in this set are “patchy”, so segmentation is improved by first smoothing the nuclei with a fairly large Gaussian Kernel.']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
    Select the input image:DNA
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16.0
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
Smooth:[module_num:6|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notes:['We will also create a smoothed image with a smaller Gaussian kernel- this will allow us to set the nuclear boundaries with more fidelity.']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
    Select the input image:DNA
    Name the output image:FilteredImage_4
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
IdentifyPrimaryObjects:[module_num:7|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notes:['We’ll first do a preliminary segmentation on the image with the heavier smoothing to find nuclear “chunks”.  We’ll accept a relatively large size range of chunks because we’re going to re-assemble the nuclei in the next stepl']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
    Select the input image:FilteredImage
    Name the primary objects to be identified:PreliminaryNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:80
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:8|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notes:['Since the nuclei in this set are relatively well-separated, we can assume any chunks that touch each other are actually parts of the same nucleus that were erroneously broken up due to the “patchiness” of the nuclei in this set.  We’ll therefore reassemble any chunks that touch into single nuclei.']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
    Select the input objects:PreliminaryNuclei
    Name the new objects:RelabeledNuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ExpandOrShrinkObjects:[module_num:9|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notes:['When we identified the nuclei the first time, we used an image that had been smoothed with a large kernel, which means there are probably pixels at the edge of the nucleus that were included that shouldn’t have been based on the original image.  We’ll therefore pull the nuclear boundaries back a bit, then re-expand them out with IdentifySecondaryObjects.']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
    Select the input objects:RelabeledNuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifySecondaryObjects:[module_num:10|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notes:['Our nuclei are now likely too small after shrinking in the previous step, so we’ll re-expand them out on an image that’s been smoothed with a much smaller kernel to try to get the most accurate boundaries possible.  These are now the final nuclei.']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
    Select the input objects:ShrunkenNuclei
    Name the objects to be identified:Nuclei
    Select the method to identify the secondary objects:Propagation
    Select the input image:FilteredImage_4
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
OverlayOutlines:[module_num:11|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notes:['Optional- output the original image with outlines of the final nuclei superimposed.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

ConvertObjectsToImage:[module_num:12|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notes:['Create a label matrix image showing the position of each nucleus to test the accuracy.']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
    Select the input objects:Nuclei
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:13|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notes:['Optional- save the outline image with the outlines.  ']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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notes:['Save the label matrix image.']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Labels
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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