CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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notes:['The first step is to decompose the several different colors in these images; as there are a variety of different hues from the different image sources, this involves trying to unmix several simultaneously.  The only one we ultimately care about is the hematoxylin, which stains the nuclei.']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
    Stain count:4
    Select the input color image:DNA
    Name the output image:Brown
    Stain:DAB
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    Name the output image:Blue
    Stain:Hematoxylin
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    Name the output image:Orange
    Stain:Ponceau-fuchsin
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    Name the output image:Red
    Stain:Fast red
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['In some images the color decomposition still leaves a fair amount of low-level background in the blue/hematoxlylin color channel, so we’ll use a top hat filter to try to pull out only objects of about a certain size that are above background.']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
    Select the input image:Blue
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast

Smooth:[module_num:7|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notes:['To further remove low-level background staining and to fill any small holes created by the EnhanceOrSuppressFeatures step, we’ll take the image output from that processing step and smooth it slightly.  ']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Once nuclei have been enhanced and the image has been smoothed, we can find nuclei in it.']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
    Select the input image:FilteredImage
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3448
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:9|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notes:['Create a label matrix image showing the position of each nucleus to test the accuracy.']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
    Select the input objects:Nuclei
    Name the output image:CellImage
    Select the color format:uint16
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
OverlayOutlines:[module_num:10|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notes:['Optional- output the original image with outlines of the final nuclei superimposed.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#F9661C
    Select objects to display:Nuclei

SaveImages:[module_num:11|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notes:['Optional- save the outline image with the outlines.  ']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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notes:['Save the label matrix image.']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Labels
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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