CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['This module calculates background so it can later be subtracted, allowing some ability to control for different fluorescence levels in the data set.']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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['This module subtracts the backround previous calculated.']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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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notes:['Here we first find putative nuclei in the given size range. The use of the “Shape” declumping method can introduce some small artifacts in the case where we are trying to find nuclei in a large size range, which we’ll deal with in subsequent modules.  ']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
    Select the input image:CorrDNA
    Name the primary objects to be identified:PreliminaryNuclei
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:8|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notes:['We’ll measure the size of the objects originally identfied.']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
    Select objects to measure:PreliminaryNuclei
    Calculate the Zernike features?:No

MeasureObjectNeighbors:[module_num:9|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notes:['We’ll measure the number of other PreliminaryNuclei each PreliminaryNucleus touches.']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
    Select objects to measure:PreliminaryNuclei
    Select neighboring objects to measure:PreliminaryNuclei
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:10|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notes:['As mentioned in IdentifyPrimaryObjects, the declumping method led to some artifacts- specifically small “notches” in a given nucleus that are counted as a separate object.  Here we remove them by filtering down to only very small objects (less than ~9 pixels in diameter) which are also touching another PreliminaryNucleus.  We’ll remove those in the next step, then use IdentifySecondaryObjects to fill in the space these were occupying.']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
    Select the objects to filter:PreliminaryNuclei
    Name the output objects:ToBeMasked
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:250.0
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:11|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notes:['Remove the small “notch” objects identified by filtering.']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
    Select objects to be masked:PreliminaryNuclei
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ToBeMasked
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:12|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notes:['Expand the real nuclei into the areas where the small “notch” objects were removed- these are now the final Nuclei objects.']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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:Nuclei
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrDNA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:13|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notes:['Optional- output the original image with outlines of the final nuclei superimposed.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Nuclei

ConvertObjectsToImage:[module_num:14|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notes:['Create a label matrix image showing the position of each nucleus to test the accuracy.']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
    Select the input objects:Nuclei
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:15|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notes:['Optional- save the outline image with the outlines.  ']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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notes:['Save the label matrix image.']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Labels
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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