CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|/Users/gway/repos/novice-cellprofiler-dsb
    Match file and image metadata:[{'Image Metadata': u'FileLocation', 'CSV Metadata': u'Image'}]
    Use case insensitive matching?:No
    Metadata file name:image_groups_appended_by_greg.csv

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Group "TissueBW")
    Name to assign these images:Pipeline_BW_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Pipeline_BW_1
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:ImageAfterMath
    Name the output image:IllumFunc
    Select how the illumination function is calculated:Background
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    Block size:4
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the output image:CorrBlue
    Select the illumination function:IllumFunc
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):3,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Pipeline_BW_1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|tissue_bw
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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