CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|/Users/gway/repos/novice-cellprofiler-dsb
    Match file and image metadata:[{'Image Metadata': u'FileLocation', 'CSV Metadata': u'Image'}]
    Use case insensitive matching?:No
    Metadata file name:image_groups_appended_by_greg.csv

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Group "PinkAndPurple")
    Name to assign these images:PinkAndPurple_3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:4
    Select the input color image:PinkAndPurple_3
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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    Name the output image:OrangeG
    Stain:Orange-G
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    Name the output image:PAS
    Stain:PAS
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:Hematoxylin
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:3
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):6,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:PinkAndPurple_3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|purple
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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