CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|/Users/gway/repos/novice-cellprofiler-dsb
    Match file and image metadata:[{'Image Metadata': u'FileLocation', 'CSV Metadata': u'Image'}]
    Use case insensitive matching?:No
    Metadata file name:image_groups_appended_by_greg.csv

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Group "Default")
    Name to assign these images:Default
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Default
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Default
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes

MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:IdentifyPrimaryObjects
    Select neighboring objects to measure:IdentifyPrimaryObjects
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select colormap:Default

FilterObjects:[module_num:10|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.27
    Filter using a maximum measurement value?:Yes
    Maximum value:1.11

MaskObjects:[module_num:11|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
    Select objects to be masked:IdentifyPrimaryObjects
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:FilterObjects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CorrBlue
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Default
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|default
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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